PsychoPy2experiment version="2020.2.8"
Settings
  Completed URL = https://run.pavlovia.org/RichardL/temporal2afc_homevslab
  Experiment info = {'': ''}
  Full-screen window = True
  Incomplete URL = https://run.pavlovia.org/RichardL/temporal2afc_homevslab
  Monitor = testMonitor
  Resources = ['resources/PCN_horizontal_0.00deg.png', 'resources/PCN_horizontal_0.36deg.png', 'resources/PCN_horizontal_0.71deg.png', 'resources/PCN_horizontal_1.07deg.png', 'resources/PCN_horizontal_1.43deg.png', 'resources/PCN_horizontal_1.79deg.png', 'resources/PCN_horizontal_2.14deg.png', 'resources/PCN_horizontal_2.50deg.png', 'resources/PCN_horizontal_2.86deg.png', 'resources/PCN_horizontal_3.57deg.png', 'resources/PCN_horizontal_4.29deg.png', 'resources/PCN_horizontal_5.00deg.png', 'resources/PCN_minus45_0.00deg.png', 'resources/PCN_minus45_1.79deg.png', 'resources/PCN_minus45_3.57deg.png', 'resources/PCN_minus45_5.36deg.png', 'resources/PCN_minus45_7.14deg.png', 'resources/PCN_minus45_8.93deg.png', 'resources/PCN_minus45_10.71deg.png', 'resources/PCN_minus45_12.50deg.png', 'resources/PCN_minus45_14.29deg.png', 'resources/PCN_minus45_17.86deg.png', 'resources/PCN_minus45_21.43deg.png', 'resources/PCN_minus45_25.00deg.png', 'resources/PCN_plus45_0.00deg.png', 'resources/PCN_plus45_1.79deg.png', 'resources/PCN_plus45_3.57deg.png', 'resources/PCN_plus45_5.36deg.png', 'resources/PCN_plus45_7.14deg.png', 'resources/PCN_plus45_8.93deg.png', 'resources/PCN_plus45_10.71deg.png', 'resources/PCN_plus45_12.50deg.png', 'resources/PCN_plus45_14.29deg.png', 'resources/PCN_plus45_17.86deg.png', 'resources/PCN_plus45_21.43deg.png', 'resources/PCN_plus45_25.00deg.png', 'resources/PCN_vertical_0.00deg.png', 'resources/PCN_vertical_0.36deg.png', 'resources/PCN_vertical_0.71deg.png', 'resources/PCN_vertical_1.07deg.png', 'resources/PCN_vertical_1.43deg.png', 'resources/PCN_vertical_1.79deg.png', 'resources/PCN_vertical_2.14deg.png', 'resources/PCN_vertical_2.50deg.png', 'resources/PCN_vertical_2.86deg.png', 'resources/PCN_vertical_3.57deg.png', 'resources/PCN_vertical_4.29deg.png', 'resources/PCN_vertical_5.00deg.png']
  Save csv file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [2048, 1152]
  expName = Temporal2AFC_homevslab
  logging level = debug
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Routines
  Routine trial
    SoundComponent tone_interval1
      saveStartStop = False
      sound = 640
      startVal [time (s)] = $stim["interval_tstart"][0]
      stopVal [duration (s)] = .15
      volume = 0.2
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    SoundComponent tone_interval2
      saveStartStop = False
      sound = 420
      startVal [time (s)] = $stim["interval_tstart"][1]
      stopVal [duration (s)] = .15
      syncScreenRefresh = False
      volume = 0.2
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    ImageComponent grating_target
      flipHoriz = True
      flipVert = True
      size = [0,0]
      startVal [time (s)] = $target_t
      stopVal [duration (s)] = $stim["duration"]
      texture resolution = 512
      units = pix
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    ImageComponent grating_foil
      size = [0,0]
      startVal [time (s)] = $foil_t
      stopVal [duration (s)] = $stim["duration"]
      texture resolution = 512
      units = pix
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    PolygonComponent dot_fixation
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1,-1,-1]
      lineWidth = 0
      nVertices = 10
      saveStartStop = False
      shape = regular polygon...
      size = [0,0]
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.7
      units = pix
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    PolygonComponent dot_fixation2
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1,-1,-1]
      lineWidth = 0
      nVertices = 10
      saveStartStop = False
      shape = regular polygon...
      size = [0,0]
      startVal [time (s)] = $(stim["interval_tstart"][1] + stim["duration"]) + 0.1
      units = pix
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    KeyboardComponent key_trial
      allowedKeys = 'f', 'j'
      correctAns = $trials.extraInfo["corrAns"]
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = $(stim["interval_tstart"][1] + stim["duration"]);
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent mocs
      Code Type = JS
      Before JS Experiment:
        // global variables
        let mocs = {"nReps":10, "nConds":7
                   };

        if (expInfo["surname"] == "test") {
            mocs["nReps"] = 1;
        }
        let exp_conditions = [];
        let thisCond = "";
      Begin JS Experiment:
        // test
        if (expInfo["surname"] == "test") {
            mocs["nReps"] = 1;
        }

        // different ranges for cardinal and oblique stimuli
        if ((expInfo["target orientation"] === "vertical")
           || (expInfo["target orientation"] === "horizontal")) {
            expInfo["cardinal"] = true;
            if (expInfo["surname"] == "Leadbeater") {
                mocs["offsets"] = ["0.36", "0.71", "1.07", "1.43", "1.79", "2.14", "2.50"];
            } else {
                mocs["offsets"] = ["0.71", "1.43", "2.14", "2.86", "3.57", "4.29", "5.00"];
            }
        } else {
            expInfo["cardinal"] = false;
            if (expInfo["surname"] == "Leadbeater") {
                mocs["offsets"] = ["1.79", "3.57", "5.36", "7.14", "8.93", "10.71", "12.50"];
            } else {
                mocs["offsets"] = ["3.57", "7.14", "10.71", "14.29", "17.86", "21.43", "25.00"];
            }
        }

        // Class declaration
        class ExperimentCondition {
            constructor(options = {}) {
                Object.assign(this, {  // assign defaults
                    orientation: "vertical",
                    ori_diff: "0.00",
                    current_count: 0,
                    max_count: 10,
                    nCorrect: 0,
                    }, options);
            }
            // Getter
            get trial_image() {
                if (this.current_count < this.max_count) {
                    this.current_count += 1;   // add to counter when getter is used
                    return this.retrieve_filename();
                } else {
                    return "";  // do not return image if max_count reached
                }
            }
            get proportion_correct() {
                return this.calc_proportion_corr();
            }
            // Method
            retrieve_filename() {
                return `resources/PCN_${this.orientation}_${this.ori_diff}deg.png`;
            }
            calc_proportion_corr() {
                if (this.current_count > 0) {
                    return (1 / this.current_count) * this.nCorrect;
                } else {
                    return "";
                }
            }
        }

        // instance of ExperimentCondition for each cond
        for (let offset of mocs["offsets"]) {
            let i_cond = new ExperimentCondition({orientation: expInfo["target orientation"],
                                                  ori_diff: offset,
                                                  max_count:mocs["nReps"]});
            exp_conditions.push(i_cond);
            }
      Begin JS Routine:
        // only use instances where .current_count() < params["nReps"]
        let trial_conditions = [];
        for (let i_cond of exp_conditions) {
            if (i_cond.current_count < mocs["nReps"]) {
                trial_conditions.push(i_cond);
                }
            }
        // if all conds have reached nReps then end experiment
        if (trial_conditions == "") {
            console.log("end of experiment")  // todo force end of exp
        } else {
            // randomise which condition to use
            let cond_idx = Math.floor(Math.random() * trial_conditions.length);
            thisCond = trial_conditions[cond_idx];  // global
            grating_foil.image = thisCond.trial_image;
        }
      End JS Routine:
        thisCond.nCorrect += key_trial.corr;  // +1 if corr else +0
    CodeComponent stim
      Code Type = JS
      Before JS Experiment:
        let stim = {"size_deg": 8, "contrast": 0.4,
                    "duration": 0.3, "interval_tstart": [0.8, 1.6]
                   };

        orders_set = false;
        let tstarts = stim["interval_tstart"];
        let Orders = {"rotation": {}, "temporal": {}};

        // Class which enables pseudorandom choices from list //
        class PseudorandomOrder {
            constructor(options = {}) {
                Object.assign(this, {  // assign defaults
                    items: [],
                    block_size: 5,
                    current_order: [],
                    trial_conditions: [],
                    idx_keys: [],
                    item_counter: {},
                }, options);
            }
            // Method
            update_current_order() {
                // randomly choose idx_key as long as counter < block_size
                let idx_choices = []
                for (let key of this.idx_keys) {
                    if (this.item_counter[key] < this.block_size) {
                        idx_choices.push(key);
                    }
                }
                let chosen_idx = parseInt(randomchoice(idx_choices))
                this.current_order = this.items[chosen_idx]
                this.item_counter[chosen_idx] = this.item_counter[chosen_idx] + 1
                // if all reached block_size then reset counters
                let fin = []
                for (let i of this.idx_keys) {
                    fin.push(this.item_counter[i] == this.block_size);
                }
                function finished(el) {
                    return el;
                }
                if (fin.every(finished) == true) {
                    for (let i in this.idx_keys) {
                        this.item_counter[i] = 0;
                    }
                }
                return this.current_order
            }
            // Methods
            initialise() {
                // set vals of idx_keys
                for (let idx in this.items) {
                    this.idx_keys.push(idx.toString());
                }
                // set counter to zero for each order
                for (let key of this.idx_keys) {
                    this.item_counter[key] = 0;
                }
            }
        }
      Begin JS Experiment:
        //// Constant Stim Properties ////
        // Image //
        grating_target.image = `resources/PCN_${expInfo['target orientation']}_${"0.00"}deg.png`;

        // Class which enables pseudorandom choices from list //
        class PseudorandomOrder {
            constructor(options = {}) {
                Object.assign(this, {  // assign defaults
                    items: [],
                    block_size: 5,
                    current_order: [],
                    trial_conditions: [],
                    idx_keys: [],
                    item_counter: {},
                }, options);
            }
            // Method
            update_current_order() {
                // randomly choose idx_key as long as counter < block_size
                let idx_choices = []
                for (let key of this.idx_keys) {
                    if (this.item_counter[key] < this.block_size) {
                        idx_choices.push(key);
                    }
                }
                let chosen_idx = parseInt(randomchoice(idx_choices))
                this.current_order = this.items[chosen_idx]
                this.item_counter[chosen_idx] = this.item_counter[chosen_idx] + 1
                // if all reached block_size then reset counters
                let fin = []
                for (let i of this.idx_keys) {
                    fin.push(this.item_counter[i] == this.block_size);
                }
                function finished(el) {
                    return el;
                }
                if (fin.every(finished) == true) {
                    for (let i in this.idx_keys) {
                        this.item_counter[i] = 0;
                    }
                }
                return this.current_order
            }
            // Methods
            initialise() {
                // set vals of idx_keys
                for (let idx in this.items) {
                    this.idx_keys.push(idx.toString());
                }
                // set counter to zero for each order
                for (let key of this.idx_keys) {
                    this.item_counter[key] = 0;
                }
            }
        }
      Begin JS Routine:
        //// ORDERS ////

        if (orders_set == false) {  // only runs on first trial
            for (let i_offset of mocs["offsets"]) {
                // Determinine spatial offsets in pseudorandom fashion //
                Orders["temporal"][i_offset] = new PseudorandomOrder({items: [[tstarts[0], tstarts[1]],
                                                                            [tstarts[1], tstarts[0]]],
                                                                    block_size: 5}
                                                                );
                Orders["temporal"][i_offset].initialise()

                // Determine CW or CCW in pseudorandom fashion //
                Orders["rotation"][i_offset] = new PseudorandomOrder({items: [0, 2],
                                                                     block_size: 5}
                                                                 );
                Orders["rotation"][i_offset].initialise()
            }
            orders_set = true;  // code wont rerun
        }


        //// FIXED PROPERTIES ////

        // Size //
        grating_target.size = [size_pix, size_pix];
        grating_foil.size = [size_pix, size_pix];
        dot_fixation.size = [(size_pix/70), (size_pix/70)];
        dot_tstart = 0.3;

        // Contrast //
        image_target.opacity = stim["contrast"];
        grating_foil.opacity = stim["contrast"];
        dot_fixation.opacity = (stim["contrast"]/1.4);


        //// FLEXIBLE PROPERTIES ////

        // Rotation //
        let trial_rotation = Orders["rotation"][thisCond.ori_diff].update_current_order()
        grating_foil.ori = thisCond.ori_diff * trial_rotation  // *0=CW, *1=target, *2=CCW
        if (trial_rotation == 0) {
            trials.extraInfo["rotation"] = "CW";
        } else {
            trials.extraInfo["rotation"] = "CCW";
        }  // mirror images cause no issues with pixel scaling


        // Interval Order //
        let trial_temporal_order = Orders["temporal"][thisCond.ori_diff].update_current_order()
        target_t = trial_temporal_order[0];
        foil_t = trial_temporal_order[1];
        if (target_t < foil_t) {
            trials.extraInfo["corrAns"] = "f";
        } else {
            trials.extraInfo["corrAns"] = "j";
        }


        // Phase //
        if (Math.random() >= 0.5) {
            grating_target.flipVert = true;
            grating_target.flipHoriz = true;
        } else {  // flipping both ways creates a mirror image
            grating_target.flipVert = false;
            grating_target.flipHoriz = false;
        }
        if (Math.random() >= 0.5) {
            grating_foil.flipVert = true;
            grating_foil.flipHoriz = true;
        } else {
            grating_foil.flipVert = false;
            grating_foil.flipHoriz = false;
        }
    CodeComponent add_to_data
      Code Type = JS
      End JS Routine:
        trials.extraInfo["nCorrect"] = thisCond.nCorrect;
        trials.extraInfo["ori offset"] = thisCond.ori_diff;
        trials.extraInfo["current count"] = thisCond.current_count;
        trials.extraInfo["proportion correct"] = thisCond.proportion_correct;
    CodeComponent testrun
      Code Type = JS
      Begin JS Routine:
        if (expInfo["surname"] == "testrun") {
            // automate responses to end exp quickly with full n_reps
            foil_t = 0;
            target_t = 0;
            stim["duration"] = 0.01;
            stim["interval_tstart"] = [0, 0];
            dot_tstart = 0;
            key_trial.corr = 1;

            // give vals to allow later code to run
            key_trial.status = PsychoJS.Status.FINISHED;
            key_trial.tStart = 0;
            key_trial.rt = 0;
            key_trial.keys = 'f';
        }
      Each JS Frame:
        if (expInfo["surname"] == "testrun" && continueRoutine == true) {
            continueRoutine = false;
        }
  Routine instructions
    TextComponent text_instructions
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 2
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      text:
        Two gratings will be presented one after the other in the centre of your screen.

        Respond with the ‘F’ key if the target orientation appears 1st.

        Respond with the ‘J’ key if the target orientation appears 2nd.

        If you are unsure then respond with your best guess.



        To continue and view your target orientation, press ‘F’ or ‘J’.
    KeyboardComponent key_instructions
      allowedKeys = 'y','n','left','right','space', 'f', 'j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine target
    TextComponent text_target
      letterHeight = 0.075
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 2
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      text:
        This is your target grating.

        Judge which of two gratings is at this orientation.

        press ‘F’ if 1st
        press ‘J’ if 2nd
    KeyboardComponent key_target
      allowedKeys = 'y','n','left','right','space', 'f', 'j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_target
      saveStartStop = False
      size = [0,0]
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    TextComponent text_begin
      letterHeight = 0.075
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = press 'F' or 'J' to begin
      units = norm
      wrapWidth = 2
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    CodeComponent scale_stim
      Code Type = JS
      Begin JS Experiment:
        // initialise val to global
        size_pix = 0;
      Begin JS Routine:
        // Size //
        size_pix = deg2pix(stim["size_deg"], expInfo["viewing distance (cm)"],
                           expInfo["monitor width (cm)"], psychoJS.window.size[0]
        );  // convert size to pixels using monitor info
    CodeComponent image_target_ppts
      Code Type = JS
      Begin JS Routine:
        // Contrast //
        grating_target.opacity = stim["contrast"];

        // Image //
        image_target.image = `resources/PCN_${expInfo['target orientation']}_${"0.00"}deg.png`;

        // Size //
        image_target.size = [size_pix, size_pix];
  Routine custom_code
    CodeComponent dlg_custom
      Code Type = JS
      Before JS Experiment:
        // overwrite expInfo in .js file before dlg presented
        expInfo = {
            "surname": "",
            "target orientation": ["vertical", "horizontal", "minus45", "plus45"],
            "monitor width (cm)": "",
            "viewing distance (cm)": ["60"],
        };
      Begin JS Experiment:
        // end experiment if any dlg fields left blank
        for (var key in expInfo) {
            if (expInfo[key] === "") {  //value not entered
        //        quitPsychoJS("ENTER ALL USER INFO", false");
                    psychoJS.event.quit;
            }
        }
        filename = `${expInfo["expName"]}_${expInfo["surname"]}_${expInfo["target orientation"]}_${expInfo["date"]}`;
      Begin JS Routine:
        expInfo["completed"] = false;
    CodeComponent F_savecsv
      Code Type = JS
      Before JS Experiment:
        function save_as_csv(rows, this_filename) {
            let csv_content = "data:text/csv;charset=utf-8,";  // put into csv format
            rows.forEach(function(rowArray) {
                let row = rowArray.join(",");
                csv_content += row + "\r\n";
            });
            // create a hidden <a> DOM node and set its download attribute as follows:
            let encodedUri = encodeURI(csv_content);
            let link = document.createElement("a");
            link.setAttribute("href", encodedUri);
            link.setAttribute("download", `${this_filename}.csv`);
            document.body.appendChild(link);  // required for FF
            link.click();  // downloads .csv
        }
    CodeComponent F_deg2pix
      Code Type = JS
      Before JS Experiment:
        function deg2pix(size_deg, distance, width_cm, width_pix) {
            //deg2cm
            let visual_angle = (size_deg / 2) * (Math.PI / 180);  // 2 r.angle triangles in rad
            let adjacent = distance;  // cm
            let opposite = Math.tan(visual_angle) * adjacent;
            let size_cm = opposite * 2;  // sum opp of both triangle
            //cm2pix
            let pix_per_cm = width_pix / width_cm;
            size_pix = size_cm * pix_per_cm;
            return size_pix;
        }
    CodeComponent F_randomchoice
      Code Type = JS
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      Before JS Experiment:
        function randomchoice(in_array) {
            // return randomly chosen element from array
            return in_array[Math.floor(Math.random() * in_array.length)];
        }
  Routine endscreen
    TextComponent text_end
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
      wrapWidth = 1.3
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      text:
        END OF RUN!

        …SAVING DATA…
    CodeComponent summary_data
      Code Type = JS
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      Begin JS Experiment:
        summary_data = [["Experiment Name", "Target Orientation", "Orientation Difference (deg)", "Proportion Correct"]
        ];
      End JS Experiment:
        ////summary_data = [["Experiment Name", "Target Orientation", "Orientation Difference (deg)", "Proportion Correct"]];
        //if (expInfo["completed"] == true) {
        //    for (let i_cond of exp_conditions) {
        //        summary_data.push([expInfo["expName"], expInfo["target orientation"],
        //                           i_cond.ori_diff, i_cond.proportion_correct
        //        ])
        //    }
        //    save_as_csv(summary_data, `myData_${filename}`);
        //}
      End JS Routine:
        expInfo["completed"] = true;
Flow
  Routine custom_code
  Routine instructions
  Routine target
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = (mocs["nReps"] * mocs["nConds"])
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    Routine trial
  LoopTerminator trials
  Routine endscreen
